OpenViBE-Scenario
0x790d75b8 = Jussi T. Lindgren
0x8c1fc55b = 1.0
0x9f5c4075 = ICA example
0xf8034a49 = Inria
Comment
  ICA decomposition example

  The scenario produces uniform random noise
  signal and a low-frequency sine wave signal.
  These are combined as a+b and a-b to form
  two mixed channels.

  This signal is then decomposed by FastICA.

  The ICA box processes each chunk independently,
  so even though it is able to separate the signals,
  the noise and the signal channels may alternate
  in the output.

Time signal
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP => #1
  Equation = sin(a*M_PI)
Noise generator => #2
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
Input - A=#1, Input - B=#2 -> Simple DSP => #3
  Equation = a-b
Input 1=#1, Input 2=#2 -> Signal Merger => #4
Signal=#4 -> 0xc67a01dc Signal display "Original signals"
  Time Scale = 10
  Display Mode = Scan
  EEG display = true
  Manual Vertical Scale = false
  Vertical Scale = 500
Input - A=#1, Input - B=#2 -> Simple DSP => #6
  Equation = a+b
Input 1=#6, Input 2=#3 -> Signal Merger => #7
-> Time based epoching
  Epoch 1 duration (in sec) = 3
  Epoch 1 intervals (in sec) = 0.5
-> Independent component analysis (FastICA) => #9
Signal=#9 -> Signal display "Independent Components"
  Time Scale = 10
  Display Mode = Scan
  EEG display = true
  Manual Vertical Scale = false
  Vertical Scale = 500
Signal=#7 -> Signal display "Mixed signals"
  Time Scale = 10
  Display Mode = Scan
  EEG display = true
  Manual Vertical Scale = false
  Vertical Scale = 500
