OpenViBE-Scenario
0x790d75b8 = Joao-Pedro Berti-Ligabo
0x9f5c4075 = EOG: Run
0xf8034a49 = Inria

GDF file reader => #0
  Filename = /home/potioc/JP/gdf/subjects/1/record-EOG-[2013.05.28-16.16.40].gdf
  Samples per buffer = 32
#0.EEG stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 2
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Channel Selector => #2
  Channel List = 1:4
  Action = Reject
  Channel Matching Method = Smart
#1 -> Channel Selector => #3
  Channel List = 1:4
  Action = Select
  Channel Matching Method = Smart
Signal=#1 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Keyboard stimulator => #5
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
EEG=#2, EOG=#3, Stimulations=#5 -> EOG_Denoising_Calibration
  Filename b Matrix = /home/potioc/JP/scenarios/b-Matrix-EEG.cfg
  Train Trigger = OVTK_GDF_End_Of_Session
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
