OpenViBE-Scenario
0x790d75b8 = Joao-Pedro Berti-Ligabo
0x9f5c4075 = EOG: Calibration
0xf8034a49 = Inria

GDF file reader => #0
  Filename = /home/potioc/JP/gdf/subjects/1/record-EOG-[2013.05.28-16.16.40].gdf
  Samples per buffer = 32
#0.EEG stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 2
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Channel Selector => #2
  Channel List = 1:4
  Action = Reject
  Channel Matching Method = Smart
-> Channel Selector => #3
  Channel List = 1:4
  Action = Select
  Channel Matching Method = Smart
Signal=#3 -> Signal display "Before"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#1 -> Channel Selector => #5
  Channel List = 1:4
  Action = Select
  Channel Matching Method = Smart
EEG=#2, EOG=#5 -> EOG Denoising
  Filename b Matrix = /home/potioc/JP/scenarios/b-Matrix-EEG.cfg
-> Channel Selector => #7
  Channel List = 1:4
  Action = Select
  Channel Matching Method = Smart
Signal=#7 -> Signal display "After"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
