OpenViBE-Scenario
0x790d75b8 = Joao-Pedro Berti-Ligabo
0x9f5c4075 = Wavelet example
0xf8034a49 = Inria

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
-> DiscreteWaveletTransform => #1
  Wavelet type = haar
  Wavelet decomposition levels = 1
Info=#1.Info, A=#1.A, D1=#1.D1 -> Inverse DWT => #2
  Wavelet type = haar
  Wavelet decomposition levels = 1
Signal=#2 -> Signal display "Reconstruction"
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#1.A -> Signal display "A"
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#1.D1 -> Signal display "D"
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#0 -> 0xc67a01dc Signal display "Raw signal"
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
